path= newArray(654);	


// All paths go below:

//path[0]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_0/";
//path[1]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_1/";
//path[2]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_10/";
//path[3]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_11/";
//path[4]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_12/";
//path[5]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_13/";
//path[6]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_14/";
//path[7]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_15/";
//path[8]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_16/";
//path[9]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_17/";
//path[10]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_18/";
//path[11]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_19/";
//path[12]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_2/";
//path[13]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_20/";
//path[14]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_21/";
//path[15]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_22/";
//path[16]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_23/";
//path[17]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_24/";
//path[18]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_3/";
//path[19]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_4/";
//path[20]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_5/";
//path[21]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_6/";
//path[22]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_7/";
//path[23]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_8/";
//path[24]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3_only/pos_9/";
//
//path[25]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_0/";
//path[26]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_1/";
//path[27]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_10/";
//path[28]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_11/";
//path[29]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_12/";
//path[30]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_13/";
//path[31]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_14/";
//path[32]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_15/";
//path[33]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_16/";
//path[34]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_17/";
//path[35]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_18/";
//path[36]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_19/";
//path[37]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_2/";
//path[38]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_20/";
//path[39]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_21/";
//path[40]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_22/";
//path[41]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_23/";
//path[42]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_24/";
//path[43]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_3/";
//path[44]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_4/";
//path[45]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_5/";
//path[46]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_6/";
//path[47]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_7/";
//path[48]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_8/";
//path[49]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4_only/pos_9/";
//
//
//path[50]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_0/";
//path[51]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_1/";
//path[52]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_10/";
//path[53]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_11/";
//path[54]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_12/";
//path[55]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_13/";
//path[56]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_14/";
//path[57]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_15/";
//path[58]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_16/";
//path[59]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_17/";
//path[60]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_18/";
//path[61]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_19/";
//path[62]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_2/";
//path[63]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_20/";
//path[64]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_21/";
//path[65]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_22/";
//path[66]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_23/";
//path[67]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_24/";
//path[68]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_3/";
//path[69]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_4/";
//path[70]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_5/";
//path[71]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_6/";
//path[72]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_7/";
//path[73]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_8/";
//path[74]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+500pM_NR/pos_9/";
//
//
//path[75]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_0/";
//path[76]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_1/";
//path[77]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_10/";
//path[78]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_11/";
//path[79]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_12/";
//path[80]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_13/";
//path[81]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_14/";
//path[82]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_15/";
//path[83]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_16/";
//path[84]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_17/";
//path[85]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_18/";
//path[86]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_19/";
//path[87]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_2/";
//path[88]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_20/";
//path[89]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_21/";
//path[90]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_22/";
//path[91]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_23/";
//path[92]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_24/";
//path[93]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_3/";
//path[94]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_4/";
//path[95]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_5/";
//path[96]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_6/";
//path[97]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_7/";
//path[98]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_8/";
//path[99]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4_only/pos_9/";
//
//
//path[100]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_0/";
//path[101]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_1/";
//path[102]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_10/";
//path[103]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_11/";
//path[104]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_12/";
//path[105]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_13/";
//path[106]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_14/";
//path[107]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_15/";
//path[108]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_16/";
//path[109]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_17/";
//path[110]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_18/";
//path[111]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_19/";
//path[112]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_2/";
//path[113]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_20/";
//path[114]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_21/";
//path[115]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_22/";
//path[116]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_23/";
//path[117]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_24/";
//path[118]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_3/";
//path[119]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_4/";
//path[120]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_5/";
//path[121]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_6/";
//path[122]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_7/";
//path[123]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_8/";
//path[124]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+5nM_NR/pos_9/";
//
//
//path[125]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_0/";
//path[126]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_1/";
//path[127]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_10/";
//path[128]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_11/";
//path[129]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_12/";
//path[130]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_13/";
//path[131]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_14/";
//path[132]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_15/";
//path[133]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_16/";
//path[134]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_17/";
//path[135]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_18/";
//path[136]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_19/";
//path[137]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_2/";
//path[138]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_20/";
//path[139]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_21/";
//path[140]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_22/";
//path[141]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_23/";
//path[142]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_24/";
//path[143]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_3/";
//path[144]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_4/";
//path[145]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_5/";
//path[146]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_6/";
//path[147]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_7/";
//path[148]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_8/";
//path[149]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3+500pM_NR/pos_9/";
//
//
//
//
//path[150]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_0/";
//path[151]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_1/";
//path[152]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_10/";
//path[153]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_11/";
//path[154]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_12/";
//path[155]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_13/";
//path[156]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_14/";
//path[157]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_15/";
//path[158]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_16/";
//path[159]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_17/";
//path[160]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_18/";
//path[161]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_19/";
//path[162]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_2/";
//path[163]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_20/";
//path[164]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_21/";
//path[165]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_22/";
//path[166]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_23/";
//path[167]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_24/";
//path[168]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_3/";
//path[169]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_4/";
//path[170]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_5/";
//path[171]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_6/";
//path[172]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_7/";
//path[173]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_8/";
//path[174]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+500pM_NR/pos_9/";
//path[175]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_0/";
//path[176]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_1/";
//path[177]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_10/";
//path[178]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_11/";
//path[179]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_12/";
//path[180]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_13/";
//path[181]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_14/";
//path[182]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_15/";
//path[183]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_16/";
//path[184]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_17/";
//path[185]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_18/";
//path[186]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_19/";
//path[187]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_2/";
//path[188]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_20/";
//path[189]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_21/";
//path[190]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_22/";
//path[191]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_23/";
//path[192]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_24/";
//path[193]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_3/";
//path[194]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_4/";
//path[195]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_5/";
//path[196]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_6/";
//path[197]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_7/";
path[198]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_8/";
//
//path[199]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5_only/pos_9/";
//path[200]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_0/";
//path[201]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_1/";
//path[202]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_10/";
//path[203]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_11/";
//path[204]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_12/";
//path[205]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_13/";
//path[206]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_14/";
//path[207]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_15/";
//path[208]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_16/";
//path[209]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_17/";
//path[210]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_18/";
//path[211]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_19/";
//path[212]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_2/";
//path[213]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_20/";
//path[214]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_21/";
//path[215]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_22/";
//path[216]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_23/";
//path[217]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_24/";
//path[218]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_3/";
//path[219]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_4/";
//path[220]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_5/";
//path[221]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_6/";
//path[222]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_7/";
//path[223]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_8/";
//path[224]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+500pM_NR/pos_9/";
//path[225]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_0/";
//path[226]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_1/";
//path[227]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_10/";
//path[228]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_11/";
//path[229]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_12/";
//path[230]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_13/";
//path[231]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_14/";
//path[232]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_15/";
//path[233]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_16/";
//path[234]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_17/";
//path[235]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_18/";
//path[236]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_19/";
//path[237]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_2/";
//path[238]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_20/";
//path[239]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_21/";
//path[240]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_22/";
//path[241]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_23/";
//path[242]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_24/";
//path[243]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_3/";
//path[244]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_4/";
//path[245]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_5/";
//path[246]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_6/";
//path[247]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_7/";
//path[248]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_8/";
//path[249]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C5+5nM_NR/pos_9/";
//path[250]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_0/";
//path[251]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_1/";
//path[252]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_10/";
//path[253]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_11/";
//path[254]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_12/";
//path[255]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_13/";
//path[256]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_14/";
//path[257]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_15/";
//path[258]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_16/";
//path[259]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_17/";
//path[260]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_18/";
//path[261]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_19/";
//path[262]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_2/";
//path[263]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_20/";
//path[264]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_21/";
//path[265]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_22/";
//path[266]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_23/";
//path[267]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_24/";
//path[268]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_3/";
//path[269]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_4/";
//path[270]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_5/";
//path[271]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_6/";
//path[272]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_7/";
//path[273]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_8/";
//path[274]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B4+5nM_NR/pos_9/";
//path[275]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_0/";
//path[276]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_1/";
//path[277]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_10/";
//path[278]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_11/";
//path[279]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_12/";
//path[280]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_13/";
//path[281]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_14/";
//path[282]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_15/";
//path[283]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_16/";
//path[284]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_17/";
//path[285]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_18/";
//path[286]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_19/";
//path[287]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_2/";
//path[288]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_20/";
//path[289]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_21/";
//path[290]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_22/";
//path[291]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_23/";
//path[292]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_24/";
//path[293]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_3/";
//path[294]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_4/";
//path[295]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_5/";
//path[296]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_6/";
//path[297]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_7/";
//path[298]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_8/";
//path[299]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A4+5nM_NR/pos_9/";
//path[300]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_0/";
//path[301]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_1/";
//path[302]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_10/";
//path[303]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_11/";
//path[304]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_12/";
//path[305]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_13/";
//path[306]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_14/";
//path[307]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_15/";
//path[308]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_16/";
//path[309]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_17/";
//path[310]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_18/";
//path[311]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_19/";
//path[312]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_2/";
//path[313]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_20/";
//path[314]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_21/";
//path[315]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_22/";
//path[316]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_23/";
//path[317]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_24/";
//path[318]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_3/";
//path[319]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_4/";
//path[320]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_5/";
//path[321]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_6/";
//path[322]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_7/";
//path[323]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_8/";
//path[324]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A3+500pM/pos_9/";
//path[325]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/Beads/pos_0/";
//path[326]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/Beads/pos_1/";
//path[327]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/Beads/pos_2/";
//path[328]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/Beads/pos_3/";
//path[329]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/Beads/pos_4/";
//path[330]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/Beads/pos_5/";
//path[331]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/Beads/pos_6/";
//path[332]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/Beads/pos_7/";
//path[333]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/Beads/pos_8/";
//path[334]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_0/";
//path[335]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_1/";
//path[336]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_10/";
//path[337]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_11/";
//path[338]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_12/";
//path[339]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_13/";
//path[340]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_14/";
//path[341]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_15/";
//path[342]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_16/";
//path[343]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_17/";
//path[344]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_18/";
//path[345]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_19/";
//path[346]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_2/";
//path[347]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_20/";
//path[348]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_21/";
//path[349]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_22/";
//path[350]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_23/";
//path[351]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_24/";
//path[352]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_25/";
//
//
////Continue here
//
//path[353]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_26/";
//path[354]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_27/";
//path[355]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_28/";
//path[356]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_29/";
//path[357]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_3/";
//path[358]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_30/";
//path[359]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_31/";
//path[360]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_32/";
//path[361]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_33/";
//path[362]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_34/";
//path[363]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_35/";
//path[364]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_36/";
//path[365]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_37/";
//path[366]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_38/";
//path[367]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_39/";
//path[368]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_4/";
//path[369]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_40/";
//path[370]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_41/";
//path[371]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_42/";
//path[372]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_43/";
//path[373]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_44/";
//path[374]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_45/";
//path[375]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_46/";
//path[376]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_47/";
//path[377]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_48/";
//path[378]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_49/";
//path[379]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_5/";
//path[380]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_50/";
//path[381]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_51/";
//path[382]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_52/";
//path[383]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_53/";
//path[384]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_54/";
//path[385]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_55/";
//path[386]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_56/";
//path[387]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_57/";
//path[388]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_58/";
//path[389]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_59/";
//path[390]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_6/";
//path[391]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_60/";
//path[392]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_61/";
//path[393]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_62/";
//path[394]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_63/";
//path[395]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_64/";
//path[396]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_65/";
//path[397]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_66/";
//path[398]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_67/";
//path[399]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_68/";
//path[400]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_69/";
//path[401]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_7/";
//path[402]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_70/";
//path[403]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_71/";
//path[404]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_72/";
//path[405]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_73/";
//path[406]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_74/";
//path[407]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_75/";
//path[408]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_76/";
//path[409]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_77/";
//path[410]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_78/";
//path[411]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_79/";
//path[412]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_8/";
//path[413]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_80/";
//path[414]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_81/";
//path[415]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_82/";
//path[416]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_83/";
//path[417]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_84/";
//path[418]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_85/";
//path[419]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_86/";
//path[420]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_87/";
//path[421]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_88/";
//path[422]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_89/";
//path[423]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_9/";
//path[424]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_90/";
//path[425]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_91/";
//path[426]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_92/";
//path[427]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_93/";
//path[428]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_94/";
//path[429]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_95/";
//path[430]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_96/";
//path[431]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_97/";
//path[432]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_98/";
//path[433]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2_only/pos_99/";
//path[434]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_0/";
//path[435]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_1/";
//path[436]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_10/";
//path[437]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_11/";
//path[438]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_12/";
//path[439]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_13/";
//path[440]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_14/";
//path[441]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_15/";
//path[442]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_16/";
//path[443]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_17/";
//path[444]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_18/";
//path[445]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_19/";
//path[446]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_2/";
//path[447]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_20/";
//path[448]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_21/";
//path[449]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_22/";
//path[450]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_23/";
//path[451]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_24/";
//path[452]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_25/";
//path[453]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_26/";
//path[454]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_27/";
//path[455]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_28/";
//path[456]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_29/";
//path[457]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_3/";
//path[458]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_30/";
//path[459]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_31/";
//path[460]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_32/";
//path[461]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_33/";
//path[462]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_34/";
//path[463]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_35/";
//path[464]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_36/";
//path[465]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_37/";
//path[466]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_38/";
//path[467]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_39/";
//path[468]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_4/";
//path[469]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_40/";
//path[470]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_41/";
//path[471]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_42/";
//path[472]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_43/";
//path[473]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_44/";
//path[474]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_45/";
//path[475]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_46/";
//path[476]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_47/";
//path[477]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_48/";
//path[478]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_49/";
//path[479]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_5/";
//path[480]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_50/";
//path[481]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_51/";
//path[482]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_52/";
//path[483]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_53/";
//path[484]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_54/";
//path[485]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_55/";
//path[486]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_56/";
//path[487]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_57/";
//path[488]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_58/";
//path[489]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_59/";
//path[490]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_6/";
//path[491]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_60/";
//path[492]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_7/";
//path[493]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_8/";
//path[494]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/B2_+500pM_NR-1/pos_9/";
//path[495]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_0/";
//path[496]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_1/";
//path[497]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_10/";
//path[498]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_11/";
//path[499]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_12/";
//path[500]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_13/";
//path[501]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_14/";
//path[502]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_15/";
//path[503]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_16/";
//path[504]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_17/";
//path[505]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_18/";
//path[506]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_19/";
//path[507]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_2/";
//path[508]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_20/";
//path[509]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_21/";
//path[510]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_22/";
//path[511]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_23/";
//path[512]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_24/";
//path[513]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_25/";
//path[514]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_26/";
//path[515]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_27/";
//path[516]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_28/";
//path[517]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_29/";
//path[518]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_3/";
//path[519]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_30/";
//path[520]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_31/";
//path[521]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_32/";
//path[522]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_33/";
//path[523]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_34/";
//path[524]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_35/";
//path[525]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_36/";
//path[526]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_37/";
//path[527]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_38/";
//path[528]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_39/";
//path[529]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_4/";
//path[530]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_40/";
//path[531]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_41/";
//path[532]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_42/";
//path[533]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_43/";
//path[534]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_44/";
//path[535]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_45/";
//path[536]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_46/";
//path[537]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_47/";
//path[538]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_48/";
//path[539]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_49/";
//path[540]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_5/";
//path[541]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_50/";
//path[542]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_51/";
//path[543]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_52/";
//path[544]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_53/";
//path[545]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_6/";
//path[546]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_7/";
//path[547]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_8/";
//path[548]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+500pM_NR/pos_9/";
//path[549]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_0/";
//path[550]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_1/";
//path[551]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_10/";
//path[552]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_11/";
//path[553]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_12/";
//path[554]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_13/";
//path[555]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_14/";
//path[556]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_15/";
//path[557]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_16/";
//path[558]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_17/";
//path[559]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_18/";
//path[560]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_19/";
//path[561]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_2/";
//path[562]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_20/";
//path[563]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_21/";
//path[564]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_22/";
//path[565]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_23/";
//path[566]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_24/";
//path[567]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_25/";
//path[568]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_26/";
//path[569]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_27/";
//path[570]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_28/";
//path[571]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_29/";
//path[572]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_3/";
//path[573]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_4/";
//path[574]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_5/";
//path[575]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_6/";
//path[576]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_7/";
//path[577]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_8/";
//path[578]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/B2+5nM_NR/pos_9/";
//path[579]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_0/";
//path[580]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_1/";
//path[581]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_10/";
//path[582]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_11/";
//path[583]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_12/";
//path[584]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_13/";
//path[585]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_14/";
//path[586]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_15/";
//path[587]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_16/";
//path[588]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_17/";
//path[589]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_18/";
//path[590]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_19/";
//path[591]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_2/";
//path[592]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_20/";
//path[593]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_21/";
//path[594]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_22/";
//path[595]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_23/";
//path[596]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_24/";
//path[597]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_3/";
//path[598]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_4/";
//path[599]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_5/";
//path[600]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_6/";
//path[601]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_7/";
//path[602]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_8/";
//path[603]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2_only/pos_9/";
//path[604]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_0/";
//path[605]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_1/";
//path[606]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_10/";
//path[607]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_11/";
//path[608]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_12/";
//path[609]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_13/";
//path[610]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_14/";
//path[611]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_15/";
//path[612]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_16/";
//path[613]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_17/";
//path[614]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_18/";
//path[615]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_19/";
//path[616]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_2/";
//path[617]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_20/";
//path[618]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_21/";
//path[619]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_22/";
//path[620]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_23/";
//path[621]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_24/";
//path[622]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_3/";
//path[623]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_4/";
//path[624]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_5/";
//path[625]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_6/";
//path[626]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_7/";
//path[627]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_8/";
//path[628]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/A2+5nM_NR/pos_9/";
//path[629]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_0/";
//path[630]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_1/";
//path[631]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_10/";
//path[632]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_11/";
//path[633]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_12/";
//path[634]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_13/";
//path[635]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_14/";
//path[636]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_15/";
//path[637]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_16/";
//path[638]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_17/";
//path[639]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_18/";
//path[640]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_19/";
//path[641]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_2/";
//path[642]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_20/";
//path[643]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_21/";
//path[644]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_22/";
//path[645]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_23/";
//path[646]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_24/";
//path[647]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_3/";
//path[648]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_4/";
//path[649]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_5/";
//path[650]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_6/";
//path[651]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_7/";
//path[652]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_8/";
//path[653]="/Volumes/Noe PhD 3/Microscopes/ONI/20231208_NPH_EVs_PLL_protocol_plate_1/C3_only/pos_9/";

for (i=198; i<path.length; i++){
dir=path[i];

stem="posZ0.tif";
processFiles(dir,stem);

//Left-hand side image (561 channel) --> crop & z-project, save and crop as square to analyse cropped image only

makeRectangle(0, 0, 428, 684);
run("Duplicate...", "title=561 duplicate");
run("Z Project...", "projection=[Average Intensity]");
saveAs("Tiff", dir+"561_pre-cropped.tif");
makeRectangle(0, 123, 428, 428);
run("Duplicate...", "title=cropped_561 duplicate");
saveAs("Tiff", dir+"561_cropped.tif");
close();
close();
close();


//Right-hand side image (638 channel) --> crop & z-project, save and crop as square to analyse cropped image only

makeRectangle(428, 0, 856, 684);
run("Duplicate...", "title=638 duplicate");
run("Z Project...", "projection=[Average Intensity]");
saveAs("Tiff", dir+"638_pre-cropped.tif");
makeRectangle(0, 123, 428, 428);
run("Duplicate...", "title=cropped_638 duplicate");
saveAs("Tiff", dir+"638_cropped.tif");
close();
close();
close();
close();




}



function processFiles(dir,stem) 

	{

	list = getFileList(dir);

		for (i=0; i<list.length; i++)

		 {

		if (!startsWith(list[i],"Log"))

			{

			if (endsWith(list[i], "/"))

		              processFiles(""+dir+list[i]);

         			 else 

			{

		             //showProgress(n++, count);

            			path = dir+list[i];

	            		processFile(path,stem);

			}

			}

		}

	}

function processFile(path,stem) 

	{
		       	if (endsWith(path, stem) ) 
 
		{
			
			open(path);
			


		}
	}







